private function A_UserInput(  ) void ;
private function B_WorklistHandling(  ) variable ;
private function C_LoadInstructions(  ) void ;
private function D_BarcodeScanning(  ) void ;
private function E_SequenceCreation(  ) void ;
private function F_PipettingSteps(  ) void ;
private function _TipPickup( sequence & _seq, variable _strCP, variable _strTipCounter ) void ;
function OnAbort(  ) void ;

function OnAbort(  ) void {
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, seqSource_Sample);
  {
    variable _FilterIdsArray_1[];
    variable _ColumnIdsArray_1[];
    variable _ColumnNamesArray_1[];
    variable _ExperimentsArray_1[];
    _FilterIdsArray_1.SetSize(0);
    _ColumnNamesArray_1.SetSize(9);
    _ColumnIdsArray_1.SetSize(9);
    _ColumnNamesArray_1.SetAt(0, "RecordId");
    _ColumnIdsArray_1.SetAt(0, 0);
    _ColumnNamesArray_1.SetAt(1, "TRackBC");
    _ColumnIdsArray_1.SetAt(1, 1);
    _ColumnNamesArray_1.SetAt(2, "TPositionId");
    _ColumnIdsArray_1.SetAt(2, 3);
    _ColumnNamesArray_1.SetAt(3, "TStatusSummary");
    _ColumnIdsArray_1.SetAt(3, 5);
    _ColumnNamesArray_1.SetAt(4, "TSumStateDescription");
    _ColumnIdsArray_1.SetAt(4, 6);
    _ColumnNamesArray_1.SetAt(5, "SRackBC");
    _ColumnIdsArray_1.SetAt(5, 8);
    _ColumnNamesArray_1.SetAt(6, "SLabwareId");
    _ColumnIdsArray_1.SetAt(6, 9);
    _ColumnNamesArray_1.SetAt(7, "SPositionId");
    _ColumnIdsArray_1.SetAt(7, 10);
    _ColumnNamesArray_1.SetAt(8, "ActionDateTime");
    _ColumnIdsArray_1.SetAt(8, 12);
    _ExperimentsArray_1.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, seqDestination_Sample, 1, _FilterIdsArray_1, 0, _ColumnIdsArray_1, _ColumnNamesArray_1, _ExperimentsArray_1, "MappingFile.xls", 1, 0, "", 1);
  }
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, ML_STAR.rgt_cont_60ml_BC_A00_0001);
  {
    variable _FilterIdsArray_2[];
    variable _ColumnIdsArray_2[];
    variable _ColumnNamesArray_2[];
    variable _ExperimentsArray_2[];
    _FilterIdsArray_2.SetSize(0);
    _ColumnNamesArray_2.SetSize(9);
    _ColumnIdsArray_2.SetSize(9);
    _ColumnNamesArray_2.SetAt(0, "RecordId");
    _ColumnIdsArray_2.SetAt(0, 0);
    _ColumnNamesArray_2.SetAt(1, "TRackBC");
    _ColumnIdsArray_2.SetAt(1, 1);
    _ColumnNamesArray_2.SetAt(2, "TPositionId");
    _ColumnIdsArray_2.SetAt(2, 3);
    _ColumnNamesArray_2.SetAt(3, "TStatusSummary");
    _ColumnIdsArray_2.SetAt(3, 5);
    _ColumnNamesArray_2.SetAt(4, "TSumStateDescription");
    _ColumnIdsArray_2.SetAt(4, 6);
    _ColumnNamesArray_2.SetAt(5, "SRackBC");
    _ColumnIdsArray_2.SetAt(5, 8);
    _ColumnNamesArray_2.SetAt(6, "SLabwareId");
    _ColumnIdsArray_2.SetAt(6, 9);
    _ColumnNamesArray_2.SetAt(7, "SPositionId");
    _ColumnIdsArray_2.SetAt(7, 10);
    _ColumnNamesArray_2.SetAt(8, "ActionDateTime");
    _ColumnIdsArray_2.SetAt(8, 12);
    _ExperimentsArray_2.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, seqDestination_Diluent, 1, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "MappingFile.xls", 1, 1, "", 1);
  }
  SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("abort"));
}

private function A_UserInput(  ) void {
  private dialog customDialog_3;
  private variable rtnValue;
  private dialog customDialog_4;
  private variable _intIndex_Bind;
  private variable _intIndex_Dest;
  private variable _blnBindVisible;
  private variable _rtnValue;
  private variable _intIndex_Src;
  private variable o_arrPossibleLabware_Dest[];
  private variable o_arrPossibleLabware_Src[];
  private variable o_arrPossibleLabware_Bind[];
  private dialog customDialog_5;
  MECC::TraceComment(Translate("####################################\n         USER INPUT: START\n####################################"));
  strWorklistFilePath = Translate("Find Worklist...");
  customDialog_3.InitCustomDialog("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");
  customDialog_3.SetCustomDialogProperty( "path1.Path", strWorklistFilePath );
  customDialog_3.ShowCustomDialog();
  rtnValue = customDialog_3.GetCustomDialogProperty( "ReturnValue" );
  strWorklistFilePath = customDialog_3.GetCustomDialogProperty( "path1.Path" );
  if (rtnValue == 2)
  {
    abort;
  }
  TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Worklist Path: "), strWorklistFilePath);
  if(0){
    customDialog_4.InitCustomDialog("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");
    customDialog_4.SetCustomDialogArrayProperty( "comboBox_Src.ItemsSource", o_arrPossibleLabware_Src );
    customDialog_4.SetCustomDialogArrayProperty( "comboBox_Bind.ItemsSource", o_arrPossibleLabware_Bind );
    customDialog_4.SetCustomDialogArrayProperty( "comboBox_Dest.ItemsSource", o_arrPossibleLabware_Dest );
    customDialog_4.SetCustomDialogProperty( "comboBox_Src.SelectedIndex", _intIndex_Src );
    customDialog_4.SetCustomDialogProperty( "comboBox_Bind.IsEnabled", _blnBindVisible );
    customDialog_4.SetCustomDialogProperty( "comboBox_Bind.SelectedIndex", _intIndex_Bind );
    customDialog_4.SetCustomDialogProperty( "comboBox_Dest.SelectedIndex", _intIndex_Dest );
    customDialog_4.ShowCustomDialog();
    _rtnValue = customDialog_4.GetCustomDialogProperty( "ReturnValue" );
    _intIndex_Src = customDialog_4.GetCustomDialogProperty( "comboBox_Src.SelectedIndex" );
    _intIndex_Bind = customDialog_4.GetCustomDialogProperty( "comboBox_Bind.SelectedIndex" );
    _intIndex_Dest = customDialog_4.GetCustomDialogProperty( "comboBox_Dest.SelectedIndex" );
  }
}

private function F_PipettingSteps(  ) void {
  private variable intNumberOfChannels;
  private variable loopCounter2;
  private variable arrLC[];
  private variable arrLC_Prev[];
  private variable fltNumberOfLoops;
  private variable loopCounter1;
  private variable loopCounter3;
  private variable intIndex;
  private variable strCP;
  private variable strCP_1000;
  private variable strCP_50;
  private variable strCP_10;
  private variable strCP_Eject;
  private variable strCP_300;
  private variable intPipettingIndex;
  private variable intNumberOfDiluentTransfers;
  private variable intNumberOfSampleLoops;
  private variable intNumberOfDiluentLoops;
  private variable intNumberOfSampleTransfers;
  MECC::TraceComment(Translate("###################################\n       PIPETTING STEPS: START\n###################################"));
  intNumberOfChannels = DevGetCfgValueWithKey(ML_STAR, 1);
  arrLC.SetSize(intNumberOfChannels);
  arrLC_Prev.SetSize(intNumberOfChannels);
  MECC::TraceComment(Translate("===== Diluent Transfers ====="));
  intPipettingIndex = 1;
  intIndex = 1;
  intNumberOfDiluentTransfers = SeqGetTotal(seqDestination_Diluent);
  fltNumberOfLoops = intNumberOfDiluentTransfers / (intNumberOfChannels * 1.0);
  intNumberOfDiluentLoops = MthCeiling(fltNumberOfLoops);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Number of Diluent loops: "), intNumberOfDiluentLoops);
  if (intNumberOfDiluentLoops != 0)
  {
    {
      for(loopCounter2 = 0; loopCounter2 < intNumberOfChannels;)
      {
        loopCounter2 = loopCounter2 + 1;
        arrLC_Prev.SetAt(loopCounter2-1, Translate("temp"));
      }
    }
    {
      for(loopCounter1 = 0; loopCounter1 < intNumberOfDiluentLoops;)
      {
        loopCounter1 = loopCounter1 + 1;
        TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Diluent Loop Counter: "), loopCounter1, Translate("/"), intNumberOfDiluentLoops);
        strCP_Eject = Translate("");
        strCP = Translate("");
        strCP_10 = Translate("");
        strCP_50 = Translate("");
        strCP_300 = Translate("");
        strCP_1000 = Translate("");
        {
          for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
          {
            loopCounter3 = loopCounter3 + 1;
            if (intIndex > intNumberOfDiluentTransfers)
            {
              MECC::TraceComment(Translate("----- Completed all transfers -----"));
              strCP = strCP + Translate("0");
              strCP_10 = strCP_10 + Translate("0");
              strCP_50 = strCP_50 + Translate("0");
              strCP_300 = strCP_300 + Translate("0");
              strCP_1000 = strCP_1000 + Translate("0");
              strCP_Eject = strCP_Eject + Translate("0");
              arrTransferVolumes_Diluent.AddAsLast(0);
              arrLC.SetAt(loopCounter3-1, Translate("HighNeedle_Water_DispenseJet"));
            }
            else
            {
              strCP = strCP + "1";
              if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= intTipSize_10)
              {
                arrLC.SetAt(loopCounter3-1, strLC_10);
                if (strLC_10 == arrLC_Prev.ElementAt( loopCounter3 -1))
                {
                  strCP_10 = strCP_10 + Translate("0");
                  strCP_Eject = strCP_Eject + Translate("0");
                }
                else
                {
                  strCP_10 = strCP_10 + Translate("1");
                  strCP_Eject = strCP_Eject + Translate("1");
                }
                strCP_50 = strCP_50 + Translate("0");
                strCP_300 = strCP_300 + Translate("0");
                strCP_1000 = strCP_1000 + Translate("0");
              }
              else
              {
                if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= intTipSize_50)
                {
                  arrLC.SetAt(loopCounter3-1, strLC_50);
                  if (strLC_50 == arrLC_Prev.ElementAt( loopCounter3 -1))
                  {
                    strCP_50 = strCP_50 + Translate("0");
                    strCP_Eject = strCP_Eject + Translate("0");
                  }
                  else
                  {
                    strCP_50 = strCP_50 + Translate("1");
                    strCP_Eject = strCP_Eject + Translate("1");
                  }
                  strCP_10 = strCP_10 + Translate("0");
                  strCP_300 = strCP_300 + Translate("0");
                  strCP_1000 = strCP_1000 + Translate("0");
                }
                else
                {
                  if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= intTipSize_300)
                  {
                    arrLC.SetAt(loopCounter3-1, strLC_300);
                    if (strLC_300 == arrLC_Prev.ElementAt( loopCounter3 -1))
                    {
                      strCP_300 = strCP_300 + Translate("0");
                      strCP_Eject = strCP_Eject + Translate("0");
                    }
                    else
                    {
                      strCP_300 = strCP_300 + Translate("1");
                      strCP_Eject = strCP_Eject + Translate("1");
                    }
                    strCP_10 = strCP_10 + Translate("0");
                    strCP_50 = strCP_50 + Translate("0");
                    strCP_1000 = strCP_1000 + Translate("0");
                  }
                  else
                  {
                    if (arrTransferVolumes_Diluent.ElementAt( intIndex -1) <= intTipSize_1000)
                    {
                      arrLC.SetAt(loopCounter3-1, strLC_1000);
                      if (strLC_1000 == arrLC_Prev.ElementAt( loopCounter3 -1))
                      {
                        strCP_1000 = strCP_1000 + Translate("0");
                        strCP_Eject = strCP_Eject + Translate("0");
                      }
                      else
                      {
                        strCP_1000 = strCP_1000 + Translate("1");
                        strCP_Eject = strCP_Eject + Translate("1");
                      }
                      strCP_10 = strCP_10 + Translate("0");
                      strCP_50 = strCP_50 + Translate("0");
                      strCP_300 = strCP_300 + Translate("0");
                    }
                  }
                }
              }
            }
            intIndex = intIndex + 1;
          }
        }
        TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Channel Pattern: "), strCP);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 10uL: "), strCP_10);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 50uL: "), strCP_50);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 300uL: "), strCP_300);
        TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 1000uL: "), strCP_1000);
        TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Transfer Volumes"), Translate("Liquid Classes"), arrTransferVolumes_Diluent, arrLC);
        if (loopCounter1 != 1)
        {
          ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
        }
        _TipPickup(ML_STAR.Tips_10uLFiltered, strCP_10, strTipCounter_10);
        _TipPickup(ML_STAR.Tips_50ulFiltered, strCP_50, strTipCounter_50);
        _TipPickup(ML_STAR.Tips_300ulFiltered, strCP_300, strTipCounter_300);
        _TipPickup(ML_STAR.Tips_1000ulFiltered, strCP_1000, strTipCounter_1000);
        ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
        ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
        intPipettingIndex = intPipettingIndex + intNumberOfChannels;
        arrLC_Prev=arrLC;
      }
    }
    ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
  }
  MECC::TraceComment(Translate("===== Sample Transfers ====="));
  intPipettingIndex = 1;
  intIndex = 1;
  intNumberOfSampleTransfers = SeqGetTotal(seqSource_Sample);
  fltNumberOfLoops = intNumberOfSampleTransfers / (intNumberOfChannels * 1.0);
  intNumberOfSampleLoops = MthCeiling(fltNumberOfLoops);
  TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Number of Sample loops: "), intNumberOfSampleLoops);
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfSampleLoops;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (loopCounter1 == 12)
      {
        abort;
      }
      TRACELEVEL::Trace_04(TRACE_LEVEL_RELEASE, Translate(">> Sample Loop Counter: "), loopCounter1, Translate("/"), intNumberOfSampleLoops);
      strCP = Translate("");
      strCP_10 = Translate("");
      strCP_50 = Translate("");
      strCP_300 = Translate("");
      strCP_1000 = Translate("");
      {
        for(loopCounter3 = 0; loopCounter3 < intNumberOfChannels;)
        {
          loopCounter3 = loopCounter3 + 1;
          if (intIndex > intNumberOfSampleTransfers)
          {
            strCP = strCP + "0";
            strCP_10 = strCP_10 + Translate("0");
            strCP_50 = strCP_50 + Translate("0");
            strCP_300 = strCP_300 + Translate("0");
            strCP_1000 = strCP_1000 + Translate("0");
            arrTransferVolumes_Sample.AddAsLast(0);
            arrLC.SetAt(loopCounter3-1, Translate("HighNeedle_Water_DispenseJet"));
          }
          else
          {
            strCP = strCP + "1";
            if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= intTipSize_10)
            {
              arrLC.SetAt(loopCounter3-1, strLC_10);
              strCP_10 = strCP_10 + Translate("1");
              strCP_50 = strCP_50 + Translate("0");
              strCP_300 = strCP_300 + Translate("0");
              strCP_1000 = strCP_1000 + Translate("0");
            }
            else
            {
              if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= intTipSize_50)
              {
                arrLC.SetAt(loopCounter3-1, strLC_50);
                strCP_50 = strCP_50 + Translate("1");
                strCP_10 = strCP_10 + Translate("0");
                strCP_300 = strCP_300 + Translate("0");
                strCP_1000 = strCP_1000 + Translate("0");
              }
              else
              {
                if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= intTipSize_300)
                {
                  arrLC.SetAt(loopCounter3-1, strLC_300);
                  strCP_300 = strCP_300 + Translate("1");
                  strCP_10 = strCP_10 + Translate("0");
                  strCP_50 = strCP_50 + Translate("0");
                  strCP_1000 = strCP_1000 + Translate("0");
                }
                else
                {
                  if (arrTransferVolumes_Sample.ElementAt( intIndex -1) <= intTipSize_1000)
                  {
                    arrLC.SetAt(loopCounter3-1, strLC_1000);
                    strCP_1000 = strCP_1000 + Translate("1");
                    strCP_10 = strCP_10 + Translate("0");
                    strCP_50 = strCP_50 + Translate("0");
                    strCP_300 = strCP_300 + Translate("0");
                  }
                }
              }
            }
          }
          intIndex = intIndex + 1;
        }
      }
      TRACELEVEL::Trace_02(TRACE_LEVEL_RELEASE, Translate(">> Channel Pattern: "), strCP);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 10uL: "), strCP_10);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 50uL: "), strCP_50);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 300uL: "), strCP_300);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Channel Pattern - 1000uL: "), strCP_1000);
      TRACELEVEL::TraceArraysFaceToFace(TRACE_LEVEL_DEBUG, Translate("Transfer Volumes"), Translate("Liquid Classes"), arrTransferVolumes_Sample, arrLC);
      _TipPickup(ML_STAR.Tips_10uLFiltered, strCP_10, strTipCounter_10);
      _TipPickup(ML_STAR.Tips_50ulFiltered, strCP_50, strTipCounter_50);
      _TipPickup(ML_STAR.Tips_300ulFiltered, strCP_300, strTipCounter_300);
      _TipPickup(ML_STAR.Tips_1000ulFiltered, strCP_1000, strTipCounter_1000);
      ML_STAR._541143F5_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Aspirate
      ML_STAR._541143F8_7FA2_11D3_AD85_0004ACB1DCB2("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"); // Dispense
      ML_STAR._541143FC_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipEject
      intPipettingIndex = intPipettingIndex + intNumberOfChannels;
    }
  }
  MECC::TraceComment(Translate("###################################\n                 PIPETTING STEPS: END\n###################################"));
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, seqSource_Sample);
  {
    variable _FilterIdsArray_1[];
    variable _ColumnIdsArray_1[];
    variable _ColumnNamesArray_1[];
    variable _ExperimentsArray_1[];
    _FilterIdsArray_1.SetSize(0);
    _ColumnNamesArray_1.SetSize(9);
    _ColumnIdsArray_1.SetSize(9);
    _ColumnNamesArray_1.SetAt(0, "RecordId");
    _ColumnIdsArray_1.SetAt(0, 0);
    _ColumnNamesArray_1.SetAt(1, "TRackBC");
    _ColumnIdsArray_1.SetAt(1, 1);
    _ColumnNamesArray_1.SetAt(2, "TPositionId");
    _ColumnIdsArray_1.SetAt(2, 3);
    _ColumnNamesArray_1.SetAt(3, "TStatusSummary");
    _ColumnIdsArray_1.SetAt(3, 5);
    _ColumnNamesArray_1.SetAt(4, "TSumStateDescription");
    _ColumnIdsArray_1.SetAt(4, 6);
    _ColumnNamesArray_1.SetAt(5, "SRackBC");
    _ColumnIdsArray_1.SetAt(5, 8);
    _ColumnNamesArray_1.SetAt(6, "SLabwareId");
    _ColumnIdsArray_1.SetAt(6, 9);
    _ColumnNamesArray_1.SetAt(7, "SPositionId");
    _ColumnIdsArray_1.SetAt(7, 10);
    _ColumnNamesArray_1.SetAt(8, "ActionDateTime");
    _ColumnIdsArray_1.SetAt(8, 12);
    _ExperimentsArray_1.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, seqDestination_Sample, 1, _FilterIdsArray_1, 0, _ColumnIdsArray_1, _ColumnNamesArray_1, _ExperimentsArray_1, "MappingFile.xls", 1, 0, "", 1);
  }
  STCC::ResetFilterSequences();
  STCC::AddFilterSequence(ML_STAR, ML_STAR.rgt_cont_60ml_BC_A00_0001);
  {
    variable _FilterIdsArray_2[];
    variable _ColumnIdsArray_2[];
    variable _ColumnNamesArray_2[];
    variable _ExperimentsArray_2[];
    _FilterIdsArray_2.SetSize(0);
    _ColumnNamesArray_2.SetSize(9);
    _ColumnIdsArray_2.SetSize(9);
    _ColumnNamesArray_2.SetAt(0, "RecordId");
    _ColumnIdsArray_2.SetAt(0, 0);
    _ColumnNamesArray_2.SetAt(1, "TRackBC");
    _ColumnIdsArray_2.SetAt(1, 1);
    _ColumnNamesArray_2.SetAt(2, "TPositionId");
    _ColumnIdsArray_2.SetAt(2, 3);
    _ColumnNamesArray_2.SetAt(3, "TStatusSummary");
    _ColumnIdsArray_2.SetAt(3, 5);
    _ColumnNamesArray_2.SetAt(4, "TSumStateDescription");
    _ColumnIdsArray_2.SetAt(4, 6);
    _ColumnNamesArray_2.SetAt(5, "SRackBC");
    _ColumnIdsArray_2.SetAt(5, 8);
    _ColumnNamesArray_2.SetAt(6, "SLabwareId");
    _ColumnIdsArray_2.SetAt(6, 9);
    _ColumnNamesArray_2.SetAt(7, "SPositionId");
    _ColumnIdsArray_2.SetAt(7, 10);
    _ColumnNamesArray_2.SetAt(8, "ActionDateTime");
    _ColumnIdsArray_2.SetAt(8, 12);
    _ExperimentsArray_2.SetSize(0);
    STCC::GenerateMappingFileV43Ex1(ML_STAR, seqDestination_Diluent, 1, _FilterIdsArray_2, 0, _ColumnIdsArray_2, _ColumnNamesArray_2, _ExperimentsArray_2, "MappingFile.xls", 1, 1, "", 1);
  }
}

private function E_SequenceCreation(  ) void {
  private variable loopCounter1;
  private variable loopCounter2;
  private variable intVolume;
  private variable intBarcodePos;
  private variable strBarcode;
  private variable strDestPosID;
  private variable strSrcLabID;
  private variable blnReset;
  private variable strDestLabID;
  private variable strSrcPosID;
  private variable strBackupWorklistPath;
  private variable loopCounter3;
  private file hndBackup;
  private variable strLogFilesPath;
  private variable intNumberOfDiluentTransfers;
  private variable loopCounter4;
  MECC::TraceComment(Translate("####################################\n      SEQUENCE CREATION: START\n####################################"));
  SeqRemoveAll(seqSource_Sample);
  SeqRemoveAll(seqDestination_Sample);
  SeqRemoveAll(seqDestination_Diluent);
  arrTransferVolumes_Sample.SetSize(0);
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfTransfers;)
    {
      loopCounter1 = loopCounter1 + 1;
      if (arrSampleVolumes.ElementAt( loopCounter1 -1) != 0)
      {
        intVolume=arrSampleVolumes.GetAt(loopCounter1-1);
        arrTransferVolumes_Sample.AddAsLast(intVolume);
        strBarcode=arrSourceBarcodes.GetAt(loopCounter1-1);
        intBarcodePos = LOOKUP::Lookup(arrSourceBarcodes_Unique, strBarcode);
        SeqAdd(seqSource_Sample, arrSourceLabwareIDs.ElementAt( intBarcodePos -1), arrSourceWells.ElementAt( loopCounter1 -1));
        strBarcode=arrDestinationBarcodes.GetAt(loopCounter1-1);
        intBarcodePos = LOOKUP::Lookup(arrDestinationBarcodes_Unique, strBarcode);
        SeqAdd(seqDestination_Sample, arrDestinationLabwareIDs.ElementAt( intBarcodePos -1), arrDestinationWells.ElementAt( loopCounter1 -1));
      }
    }
  }
  if (intTraceLevel == TRACE_LEVEL_DEBUG)
  {
    Util2::Debug::TraceSequencesAndData_1(Translate("Sample Sequences"), seqSource_Sample, seqDestination_Sample, arrTransferVolumes_Sample);
  }
  arrTransferVolumes_Diluent.SetSize(0);
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfTransfers;)
    {
      loopCounter2 = loopCounter2 + 1;
      if (arrDiluentVolumes.ElementAt( loopCounter2 -1) > 0)
      {
        intVolume=arrDiluentVolumes.GetAt(loopCounter2-1);
        arrTransferVolumes_Diluent.AddAsLast(intVolume);
        strBarcode=arrDestinationBarcodes.GetAt(loopCounter2-1);
        intBarcodePos = LOOKUP::Lookup(arrDestinationBarcodes_Unique, strBarcode);
        SeqAdd(seqDestination_Diluent, arrDestinationLabwareIDs.ElementAt( intBarcodePos -1), arrDestinationWells.ElementAt( loopCounter2 -1));
      }
    }
  }
  if (intTraceLevel == TRACE_LEVEL_DEBUG)
  {
    Util2::Debug::TraceSequenceAndData_1(Translate("Diluent Sequences"), seqDestination_Diluent, arrTransferVolumes_Diluent);
  }
  OPT_ORDER::OptChannels_PosVol(seqDestination_Diluent, arrTransferVolumes_Diluent, ML_STAR);
  OPT_ORDER::OptChannels_AspDispVol(seqSource_Sample, seqDestination_Sample, arrTransferVolumes_Sample, ML_STAR);
  if(0){
    strLogFilesPath = FilGetLogFilesPath();
    strBackupWorklistPath = StrConcat4(strLogFilesPath, Translate(""), Translate("\\"), Translate("Backup_PipettingSequences.csv"));
    hndBackup.AddField("Source Labware ID", strSrcLabID, hslString, 255);
    hndBackup.AddField("Source Position ID", strSrcPosID, hslString, 255);
    hndBackup.AddField("Destination Labware ID", strDestLabID, hslString, 255);
    hndBackup.AddField("Destination Position ID", strDestPosID, hslString, 255);
    hndBackup.AddField("Volume", intVolume, hslString, 255);
    hndBackup.SetDelimiter(hslCSVDelimited);
    if( 0 == hndBackup.Open(strBackupWorklistPath, hslWrite) )
    {
          MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strBackupWorklistPath, "HxMetEdCompCmd");
    }
    intNumberOfDiluentTransfers = SeqGetTotal(seqDestination_Diluent);
    {
      for(loopCounter3 = 0; loopCounter3 < intNumberOfDiluentTransfers;)
      {
        loopCounter3 = loopCounter3 + 1;
        strSrcLabID = SeqGetLabwareId(ML_STAR.rgt_cont_60ml_BC_A00_0001);
        strSrcPosID = SeqGetPositionId(ML_STAR.rgt_cont_60ml_BC_A00_0001);
        strDestLabID = SeqGetLabwareId(seqDestination_Diluent);
        strDestPosID = SeqGetPositionId(seqDestination_Diluent);
        intVolume=arrTransferVolumes_Diluent.GetAt(loopCounter3-1);
        if( 0 == hndBackup.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        blnReset = loopCounter3 % 8;
        if (blnReset == 0)
        {
          SeqResetSequenceIndexes(ML_STAR.rgt_cont_60ml_BC_A00_0001);
        }
        else
        {
          SeqIncrement(ML_STAR.rgt_cont_60ml_BC_A00_0001, 1);
        }
        SeqIncrement(seqDestination_Diluent, 1);
      }
    }
    SeqResetSequenceIndexes(ML_STAR.rgt_cont_60ml_BC_A00_0001);
    SeqResetSequenceIndexes(seqDestination_Diluent);
    {
      for(loopCounter4 = 0; loopCounter4 < intNumberOfTransfers;)
      {
        loopCounter4 = loopCounter4 + 1;
        strSrcLabID = SeqGetLabwareId(seqSource_Sample);
        strSrcPosID = SeqGetPositionId(seqSource_Sample);
        strDestLabID = SeqGetLabwareId(seqDestination_Sample);
        strDestPosID = SeqGetPositionId(seqDestination_Sample);
        intVolume=arrTransferVolumes_Sample.GetAt(loopCounter4-1);
        if( 0 == hndBackup.WriteRecord() )
        {
              MECC::RaiseRuntimeErrorEx(-1473380096, MECC::IDS::stepNameFileWrite, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        SeqIncrement(seqSource_Sample, 1);
        SeqIncrement(seqDestination_Sample, 1);
      }
    }
    if( 0 != hndBackup.Close() )
    {
          MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
    }
    hndBackup.RemoveFields();
    SeqResetSequenceIndexes(seqDestination_Sample);
    SeqResetSequenceIndexes(seqSource_Sample);
  }
}

private function B_WorklistHandling(  ) variable {
  private variable strWorklist_DestBC;
  private variable strWorklist_DestWell;
  private variable strWorklist_VolDil;
  private variable strWorklist_SrcWell;
  private variable strWorklist_SrcBC;
  private variable strWorklist_VolSam;
  private file hndWorklist;
  private variable __[];
  private variable fltWorklist_VolDil;
  private variable fltWorklist_VolSam;
  private variable blnError;
  private variable loopCounter1;
  private variable intMaxSourcePlateNumber;
  private variable intMaxDestinationPlateNumber;
  MECC::TraceComment(Translate("####################################\n      WORKLIST HANDLING: START\n####################################"));
  SeqGetLabwareIds(ML_STAR.Load_Source, arrSourceLabwareIDs);
  intMaxSourcePlateNumber=arrSourceLabwareIDs.GetSize();
  SeqGetLabwareIds(ML_STAR.Load_Destination, arrDestinationLabwareIDs);
  intMaxDestinationPlateNumber=arrDestinationLabwareIDs.GetSize();
  arrSourceBarcodes.SetSize(0);
  arrSourceWells.SetSize(0);
  arrDestinationBarcodes.SetSize(0);
  arrDestinationWells.SetSize(0);
  arrSampleVolumes.SetSize(0);
  arrDiluentVolumes.SetSize(0);
  hndWorklist.AddField("Source Label", strWorklist_SrcBC, hslString, 255);
  hndWorklist.AddField("Source Position", strWorklist_SrcWell, hslString, 255);
  hndWorklist.AddField("Destination Label", strWorklist_DestBC, hslString, 255);
  hndWorklist.AddField("Destination Position", strWorklist_DestWell, hslString, 255);
  hndWorklist.AddField("Sample Volume", strWorklist_VolSam, hslString, 255);
  hndWorklist.AddField("Diluent Volume", strWorklist_VolDil, hslString, 255);
  hndWorklist.SetDelimiter(hslCSVDelimited);
  if( 0 == hndWorklist.Open(strWorklistFilePath, hslAppend) )
  {
        MECC::RaiseRuntimeErrorEx(-1523711743, MECC::IDS::stepNameFileOpen, MECC::IDS::errorStepFileOpenFailed, strWorklistFilePath, "HxMetEdCompCmd");
  }
  {
    loopCounter1 = 0;
    while (
       (hndWorklist.Eof() == 0)
    )
    {
      loopCounter1 = loopCounter1 + 1;
      if( 0 == hndWorklist.ReadRecord() )
      {
            MECC::RaiseRuntimeErrorEx(-1490157312, MECC::IDS::stepNameFileRead, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
      }
      WELL_FORMAT::A01_to_A1(strWorklist_SrcWell);
      WELL_FORMAT::A01_to_A1(strWorklist_DestWell);
      fltWorklist_VolSam = StrFVal(strWorklist_VolSam);
      fltWorklist_VolDil = StrFVal(strWorklist_VolDil);
      arrSourceBarcodes.AddAsLast(strWorklist_SrcBC);
      arrSourceWells.AddAsLast(strWorklist_SrcWell);
      arrDestinationBarcodes.AddAsLast(strWorklist_DestBC);
      arrDestinationWells.AddAsLast(strWorklist_DestWell);
      arrSampleVolumes.AddAsLast(fltWorklist_VolSam);
      arrDiluentVolumes.AddAsLast(fltWorklist_VolDil);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- Line Count: "), loopCounter1);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_SrcBC: "), strWorklist_SrcBC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_SrcWell: "), strWorklist_SrcWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_DestBC: "), strWorklist_DestBC);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_DestWell: "), strWorklist_DestWell);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_VolSam: "), strWorklist_VolSam);
      TRACELEVEL::Trace_02(TRACE_LEVEL_DEBUG, Translate("-- strWorklist_VolDil: "), strWorklist_VolDil);
    }
  }
  if( 0 != hndWorklist.Close() )
  {
        MECC::RaiseRuntimeErrorEx(-1456602880, MECC::IDS::stepNameFileClose, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
  }
  hndWorklist.RemoveFields();
  intNumberOfTransfers=arrSourceWells.GetSize();
  TRACEARRAY::TraceArray(Translate("Full Worklist"), arrSourceBarcodes, arrSourceWells, arrDestinationBarcodes, arrDestinationWells, arrSampleVolumes, arrDiluentVolumes, __, __, __, __, __, __, __, __, __, __);
  blnError = 0;
  arrSourceBarcodes_Unique.SetSize(0);
  arrDestinationBarcodes_Unique.SetSize(0);
  UNIQUE_MEMBERS::Unique_members(arrSourceBarcodes, arrSourceBarcodes_Unique, 0);
  intNumberOfSourceBarcodes=arrSourceBarcodes_Unique.GetSize();
  if (intNumberOfSourceBarcodes > intMaxSourcePlateNumber)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Worklist contains too many source plates for this method"), Translate(""));
    blnError = 1;
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Unique Source Barcodes"), arrSourceBarcodes_Unique);
  UNIQUE_MEMBERS::Unique_members(arrDestinationBarcodes, arrDestinationBarcodes_Unique, 0);
  intNumberOfDestinationBarcodes=arrDestinationBarcodes_Unique.GetSize();
  if (intNumberOfDestinationBarcodes > intMaxDestinationPlateNumber)
  {
    TRACELEVEL::Trace_02(TRACE_LEVEL_NONE, Translate("## Worklist contains too many destination plates for this method"), Translate(""));
    blnError = 1;
  }
  TRACELEVEL::TraceArray(TRACE_LEVEL_RELEASE, Translate(">> Unique Destination Barcodes"), arrDestinationBarcodes_Unique);
  return (blnError);
}

private function C_LoadInstructions(  ) void {
  private variable intLoadSeqCap_Src;
  private variable loopCounter2;
  private variable strLoadMessage_Temp;
  private variable strBarcode;
  private variable intLoadSeqCap_Dest;
  private variable strLoadMessage;
  private variable intTipsNeeded_10;
  private variable intTipsNeeded_1000;
  private variable intTipsNeeded_300;
  private variable loopCounter1;
  private variable intTipsNeeded_50;
  private variable intVolume;
  private variable arrCarrierIDs[];
  private dialog customDialog_6;
  private variable blnCarriersLoaded;
  private variable arrUnloadedCarrierIDs[];
  private variable intDiluentVol;
  private variable loopCounter3;
  MECC::TraceComment(Translate("###################################\n     LOAD INSTRUCTIONS: START\n###################################"));
  intLoadSeqCap_Src = 96 * intNumberOfSourceBarcodes;
  ML_STAR.Load_Source.SetCount(intLoadSeqCap_Src);
  strLoadMessage_Temp = Translate("");
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfSourceBarcodes;)
    {
      loopCounter2 = loopCounter2 + 1;
      strBarcode=arrSourceBarcodes_Unique.GetAt(loopCounter2-1);
      strLoadMessage_Temp = StrConcat4(strLoadMessage_Temp, strBarcode, Translate(", "), Translate(""));
    }
  }
  strLoadMessage = StrConcat8(Translate("Please load the "), intNumberOfSourceBarcodes, Translate(" source "), Translate("plate(s) on the highlighted position(s). "), Translate("Plate order by name: "), strLoadMessage_Temp, Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Load_Source, strLoadMessage);
  intLoadSeqCap_Dest = 96 * intNumberOfDestinationBarcodes;
  ML_STAR.Load_Destination.SetCount(intLoadSeqCap_Dest);
  strLoadMessage_Temp = Translate("");
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfDestinationBarcodes;)
    {
      loopCounter2 = loopCounter2 + 1;
      strBarcode=arrDestinationBarcodes_Unique.GetAt(loopCounter2-1);
      strLoadMessage_Temp = StrConcat4(strLoadMessage_Temp, strBarcode, Translate(", "), Translate(""));
    }
  }
  strLoadMessage = StrConcat8(Translate("Please load the "), intNumberOfDestinationBarcodes, Translate(" destination "), Translate("plate(s) on the highlighted position(s). "), Translate("Plate order by name: "), strLoadMessage_Temp, Translate(""), Translate(""));
  LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.Load_Destination, strLoadMessage);
  intDiluentVol = 0;
  {
    for(loopCounter3 = 0; loopCounter3 < intNumberOfTransfers;)
    {
      loopCounter3 = loopCounter3 + 1;
      intDiluentVol = intDiluentVol + arrDiluentVolumes.ElementAt( loopCounter3 -1);
    }
  }
  if (intDiluentVol != 0)
  {
    strLoadMessage = StrConcat8(Translate("Please load the "), Translate("diluent reservoir"), Translate(""), Translate(" on the highlighted position(s). "), Translate(""), Translate(""), Translate(""), Translate(""));
    LOAD_INSTRUCTIONS::load_instructions(ML_STAR, ML_STAR.rgt_cont_60ml_BC_A00_0001, strLoadMessage);
  }
  intTipsNeeded_10 = 0;
  intTipsNeeded_50 = 0;
  intTipsNeeded_300 = 0;
  intTipsNeeded_1000 = 0;
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfTransfers;)
    {
      loopCounter1 = loopCounter1 + 1;
      intVolume=arrDiluentVolumes.GetAt(loopCounter1-1);
      if (intVolume != 0)
      {
        if (intVolume <= intTipSize_10)
        {
          if (intTipsNeeded_10 < 8)
          {
            intTipsNeeded_10 = intTipsNeeded_10 + 1;
          }
        }
        else
        {
          if (intVolume <= intTipSize_50)
          {
            if (intTipsNeeded_50 < 8)
            {
              intTipsNeeded_50 = intTipsNeeded_50 + 1;
            }
          }
          else
          {
            if (intVolume <= intTipSize_300)
            {
              if (intTipsNeeded_300 < 8)
              {
                intTipsNeeded_300 = intTipsNeeded_300 + 1;
              }
            }
            else
            {
              if (intVolume <= intTipSize_1000)
              {
                if (intTipsNeeded_1000 < 8)
                {
                  intTipsNeeded_1000 = intTipsNeeded_1000 + 1;
                }
              }
            }
          }
        }
      }
    }
  }
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfTransfers;)
    {
      loopCounter1 = loopCounter1 + 1;
      intVolume=arrSampleVolumes.GetAt(loopCounter1-1);
      if (intVolume <= intTipSize_10)
      {
        intTipsNeeded_10 = intTipsNeeded_10 + 1;
      }
      else
      {
        if (intVolume <= intTipSize_50)
        {
          intTipsNeeded_50 = intTipsNeeded_50 + 1;
        }
        else
        {
          if (intVolume <= intTipSize_300)
          {
            intTipsNeeded_300 = intTipsNeeded_300 + 1;
          }
          else
          {
            if (intVolume <= intTipSize_1000)
            {
              intTipsNeeded_1000 = intTipsNeeded_1000 + 1;
            }
          }
        }
      }
    }
  }
  if (intTipsNeeded_10 != 0)
  {
    LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.Tips_10uLFiltered, 10, intTipsNeeded_10, strTipCounter_10, 1);
  }
  if (intTipsNeeded_50 != 0)
  {
    LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.Tips_50ulFiltered, 50, intTipsNeeded_50, strTipCounter_50, 1);
  }
  if (intTipsNeeded_300 != 0)
  {
    LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.Tips_300ulFiltered, 300, intTipsNeeded_300, strTipCounter_300, 1);
  }
  if (intTipsNeeded_1000 != 0)
  {
    LOAD_INSTRUCTIONS::load_instructions_tips(ML_STAR, ML_STAR.Tips_1000ulFiltered, 1000, intTipsNeeded_1000, strTipCounter_1000, 1);
  }
  arrCarrierIDs.SetSize(0);
  if (intTipsNeeded_10 != 0)
  {
    arrCarrierIDs.AddAsLast(Translate("TIP_CAR_480_A00_0004"));
  }
  if (intTipsNeeded_50 != 0)
  {
    arrCarrierIDs.AddAsLast(Translate("TIP_CAR_480_A00_0001"));
  }
  if (intTipsNeeded_300 != 0)
  {
    arrCarrierIDs.AddAsLast(Translate("TIP_CAR_480_A00_0002"));
  }
  if (intTipsNeeded_1000 != 0)
  {
    arrCarrierIDs.AddAsLast(Translate("TIP_CAR_480_A00_0003"));
  }
  arrCarrierIDs.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0001"));
  arrCarrierIDs.AddAsLast(Translate("MFX_CAR_5DWP_NestRB_0003"));
  arrCarrierIDs.AddAsLast(Translate("RGT_CAR_5R60_A00_0001"));
  {
    while (1 == 1)
    {
      blnCarriersLoaded = CHECKCARRIERPRESENCE::CheckCarrierPresenceByArrOfLabIDs(ML_STAR, arrCarrierIDs, arrUnloadedCarrierIDs);
      if (blnCarriersLoaded == 0)
      {
        break;
      }
      customDialog_6.InitCustomDialog("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");
      customDialog_6.ShowCustomDialog();
      _rtn = customDialog_6.GetCustomDialogProperty( "ReturnValue" );
      if (_rtn == 2)
      {
        abort;
      }
    }
  }
}

private function D_BarcodeScanning(  ) void {
  private variable loopCounter1;
  private variable loopCounter2;
  MECC::TraceComment(Translate("###################################\n     BARCODE SCANNING: START\n###################################"));
  {
    for(loopCounter1 = 0; loopCounter1 < intNumberOfSourceBarcodes;)
    {
      loopCounter1 = loopCounter1 + 1;
      Util2::VarArrCheckIndex(arrSourceBarcodes_Unique, loopCounter1, "arrSourceBarcodes_Unique");
      Util2::VarArrCheckIndex(arrSourceLabwareIDs, loopCounter1, "arrSourceLabwareIDs");
      STCC::SetElementBarcode(ML_STAR, arrSourceLabwareIDs.ElementAt(loopCounter1-1), "", arrSourceBarcodes_Unique.ElementAt(loopCounter1-1));
    }
  }
  {
    for(loopCounter2 = 0; loopCounter2 < intNumberOfDestinationBarcodes;)
    {
      loopCounter2 = loopCounter2 + 1;
      Util2::VarArrCheckIndex(arrDestinationBarcodes_Unique, loopCounter2, "arrDestinationBarcodes_Unique");
      Util2::VarArrCheckIndex(arrDestinationLabwareIDs, loopCounter2, "arrDestinationLabwareIDs");
      STCC::SetElementBarcode(ML_STAR, arrDestinationLabwareIDs.ElementAt(loopCounter2-1), "", arrDestinationBarcodes_Unique.ElementAt(loopCounter2-1));
    }
  }
}

private function _TipPickup( sequence & _seq, variable _strCP, variable _strTipCounter ) void {
  private variable _blnPickup;
  private variable _intCPLength;
  private variable _blnTip;
  private variable _intRightTrim;
  private variable _strTipOfInterest;
  private variable loopCounter1;
  private variable _intTipCount;
  private variable _int;
  private dialog customDialog_7;
  private dialog customDialog_8;
  private variable rtnValue;
  _intCPLength = StrGetLength(_strCP);
  _intTipCount = 0;
  {
    for(loopCounter1 = 0; loopCounter1 < _intCPLength;)
    {
      loopCounter1 = loopCounter1 + 1;
      _strTipOfInterest = StrLeft(_strCP, loopCounter1);
      _strTipOfInterest = StrRight(_strTipOfInterest, 1);
      _blnTip = StrFind(_strTipOfInterest, Translate("1"));
      if (_blnTip != -1)
      {
        _intTipCount = _intTipCount + 1;
      }
    }
  }
  if (_intTipCount == 0)
  {
    return;
  }
  {
    while (1 == 1)
    {
      onerror goto errLabel_9 ;
      err.Clear();
      ML_STAR._541143FA_7FA2_11D3_AD85_0004ACB1DCB2("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"); // TipPickUp
      SeqIncrement(_seq, _intTipCount);
      break;
      errLabel_9 : {}
      onerror goto 0;
      if (err.GetId() != 0)   /* skip handler if no error */
      {
        SLACKMESSENGER_V2::SendUpdate(ML_STAR, Translate("Error during tip pickup"));
        customDialog_8.InitCustomDialog("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");
        customDialog_8.ShowCustomDialog();
        rtnValue = customDialog_8.GetCustomDialogProperty( "ReturnValue" );
        if (rtnValue == 2)
        {
          abort;
        }
      }   /* end if from skip handler if no error */
    }
  }
  TipCount::Write2(_seq, _strTipCounter, ML_STAR);
}
